PsychoPy2experiment version="3.0.0b13"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 800]
  expName = online_exp_continuous
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $stimImg_1
      pos = (0,.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = text_old,text_new
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_old
      letterHeight = 0.1
      pos = (-.5, 0)
      startVal [time (s)] = 1.0
      text = OLD
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    TextComponent text_new
      letterHeight = 0.1
      pos = (.5, 0)
      startVal [time (s)] = 1.0
      text = NEW
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = online_exp_continuous_conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stimIMG_1', 'setsof3/1a.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/2a.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/3a.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/5a.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/7a.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/2a.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/1b.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/7b.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/6a.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/4a.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/8a.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/9a.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/10a.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/11a.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/10b.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/12a.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/8b.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/11a.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/9a.jpg')]),
      OrderedDict([('stimIMG_1', 'setsof3/12b.jpg')])]
    Routine trial
  LoopTerminator trials
